PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      fillColor = white
      size = 10,10
      units = pix
      shape = cross
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    PolygonComponent line1
      startVal [time (s)] = 1
      fillColor = white
      size = 100,10
      pos = -150,0
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent line2
      startVal [time (s)] = 1
      fillColor = white
      size = 100,10
      pos = -50,0
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent line3
      startVal [time (s)] = 1
      fillColor = white
      size = 100,10
      pos = 50,0
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent line4
      startVal [time (s)] = 1
      fillColor = white
      size = 100,10
      pos = 150,0
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent probe
      startVal [time (s)] = 2.0
      fillColor = white
      size = 10,10
      pos [set every repeat] = pos,60
      units = pix
      shape = triangle
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    KeyboardComponent key_resp
      startVal [time (s)] = 2.0
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $corr_resp
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  Routine instructions
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    TextComponent text
      startVal [time (s)] = 0
      text = Hi, your task is to look at the rectangle with a triangle over it and press its corresponding letter on the keyboard according to the location of triangle. If it's on the left most rectangle then press z, if 2nd left then x. If it's over the second from right then c and if right most then v. Press space to start
      letterHeight = 0.05
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    KeyboardComponent key_resp.start
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine thank.you
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    TextComponent thankyou
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
      text = Thank you!
      letterHeight = 0.05
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    conditionsFile = sequence-conditions.csv
    nReps = 50
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  LoopInitiator trials2 loopType="TrialHandler"
    loopType = fullRandom
    conditionsFile = sequence-conditions.csv
    nReps = 50
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials2
  Routine thank.you
